mouse stick = response_manager.get_mouse( 1 );
#joystick stick = response_manager.get_joystick( 1 ); 
stick.set_min_max( 1, -1, 1 );
stick.set_min_max( 2, -264, 220 );
#stick.set_saturation( 1, 0.999 );
#stick.set_saturation( 2, 0.999 );
#stick.set_dead_zone( 1, 0.001 ); 
#stick.set_dead_zone( 2, 0.001 );

sub box10 (int duration10)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration10
   until clock.time() >= end_time
	begin
	array <int> seq10[10] = {-220, -176, -132, -88, -44, 0, 44, 88, 132, 176};
	array <string> num[10] = {"$1","$2","$3","$4","$5","$6","$7","$8","$9","$10"};
	array <string> mun[10] = {"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll();
	cursor10.set_part_x( 1, stick.x() ); 
	cursor10.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding10.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$10"); dollar_3.redraw();
			coding10.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>10 begin
			if (stick.y()>seq10[t]) 
			then rex10[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding10.set_event_code(num[t]);
			elseif (stick.y()<seq10[t]) 
			then rex10[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_10.set_caption("$10"); dollar_10.redraw();
		codes10.present();
	end;
end;

sub box13 (int duration13)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration13
   until clock.time() >= end_time
	begin
	array <int> seq13[13] = {-203,	-169,	-135,	-102,	-68,	-34,	0,	34,	68,	102,	135,	169,	203};
	array <string> num[13] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13"};
	array <string> mun[13] = { "$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor13.set_part_x( 1, stick.x() ); 
	cursor13.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding13.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$13"); dollar_3.redraw();
			coding13.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>13 begin
			if (stick.y()>seq13[t]) 
			then rex13[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding13.set_event_code(num[t]);
			elseif (stick.y()<seq13[t]) 
			then rex13[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_13.set_caption("$13"); dollar_13.redraw();
		codes13.present();
	end;
end;

sub box16 (int duration16)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration16
   until clock.time() >= end_time
	begin
	array <int> seq16[16] = {-206,	-179,	-151,	-124,	-96,	-69,	-41,	-14,	14,	41,	69,	96,	124,	151,	179,	206};
	array <string> num[16] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16"};
	array <string> mun[16] = { "$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor16.set_part_x( 1, stick.x() ); 
	cursor16.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding16.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$16"); dollar_3.redraw();
			coding16.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>16 begin
			if (stick.y()>seq16[t]) 
			then rex16[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding16.set_event_code(num[t]);
			elseif (stick.y()<seq16[t]) 
			then rex16[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_16.set_caption("$16"); dollar_16.redraw();
		codes16.present();
	end;
end;

sub box19 (int duration19)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration19
   until clock.time() >= end_time
	begin
	array <int> seq19[19] = {-208,	-185,	-162,	-139,	-116,	-93,	-69,	-46,	-23,	
	0,	23,	46,	69,	93,	116,	139,	162,	185,	208};
	array <string> num[19] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19"};
	array <string> mun[19] = { "$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor19.set_part_x( 1, stick.x() ); 
	cursor19.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding19.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$19"); dollar_3.redraw();
			coding19.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>19 begin
			if (stick.y()>seq19[t]) 
			then rex19[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding19.set_event_code(num[t]);
			elseif (stick.y()<seq19[t]) 
			then rex19[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_19.set_caption("$19"); dollar_19.redraw();
		codes19.present();
	end;
end;

sub box22 (int duration22)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration22
   until clock.time() >= end_time
	begin
	array <int> seq22[22] = {-210,	-190,	-170,	-150,	-130,	-110,	-90,	-70,	-50,	-30,	-10,	
	10,	30,	50,	70,	90,	110,	130,	150,	170,	190,	210};
	array <string> num[22] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22"};
	array <string> mun[22] = { "$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor22.set_part_x( 1, stick.x() ); 
	cursor22.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding22.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$22"); dollar_3.redraw();
			coding22.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>22 begin
			if (stick.y()>seq22[t]) 
			then rex22[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding22.set_event_code(num[t]);
			elseif (stick.y()<seq22[t]) 
			then rex22[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_22.set_caption("$22"); dollar_22.redraw();
		codes22.present();
	end;
end;

sub box25 (int duration25)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration25
   until clock.time() >= end_time
	begin
	array <int> seq25[25] = {-211,	-194,	-176,	-158,	-141,	-123,	-106,	-88,	-70,	-53,	-35,	-18,	
	0,	18,	35,	53,	70,	88,	106,	123,	141,	158,	176,	194,	211};
	array <string> num[25] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25"};
	array <string> mun[25] = { "$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor25.set_part_x( 1, stick.x() ); 
	cursor25.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding25.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$25"); dollar_3.redraw();
			coding25.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>25 begin
			if (stick.y()>seq25[t]) 
			then rex25[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding25.set_event_code(num[t]);
			elseif (stick.y()<seq25[t]) 
			then rex25[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_25.set_caption("$25"); dollar_25.redraw();
		codes25.present();
	end;
end;

sub box28 (int duration28)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration28
   until clock.time() >= end_time
	begin
	array <int> seq28[28] = {-212,	-196,	-181,	-165,	-149,	-134,	-118,	-102,	-86,	-71,	-55,	-39,	-24,	-8,	
	8,	24,	39,	55,	71,	86,	102,	118,	134,	149,	165,	181,	196,	212};
	array <string> num[28] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25","$26","$27","$28"};
	array <string> mun[28] = { "$27","$26","$25","$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor28.set_part_x( 1, stick.x() ); 
	cursor28.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding28.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$28"); dollar_3.redraw();
			coding28.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>28 begin
			if (stick.y()>seq28[t]) 
			then rex28[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding28.set_event_code(num[t]);
			elseif (stick.y()<seq28[t]) 
			then rex28[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_28.set_caption("$28"); dollar_28.redraw();
		codes28.present();
	end;
end;

sub box31 (int duration31)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration31
   until clock.time() >= end_time
	begin
	array <int> seq31[31] = {-213,	-199,	-185,	-170,	-156,	-142,	-128,	-114,	-99,	-85,	-71,	-57,	-43,	-28,	-14,	
	0,	14,	28,	43,	57,	71,	85,	99,	114,	128,	142,	156,	170,	185,	199,	213};
	array <string> num[31] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25","$26","$27","$28","$29","$30",
										"$31"};
	array <string> mun[31] = {	"$30",
										"$29","$28","$27","$26","$25","$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor31.set_part_x( 1, stick.x() ); 
	cursor31.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding31.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$31"); dollar_3.redraw();
			coding31.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>31 begin
			if (stick.y()>seq31[t]) 
			then rex31[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding31.set_event_code(num[t]);
			elseif (stick.y()<seq31[t]) 
			then rex31[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_31.set_caption("$31"); dollar_31.redraw();
		codes31.present();
	end;
end;

sub box34 (int duration34)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration34
   until clock.time() >= end_time
	begin
	array <int> seq34[34] = {-214,	-201,	-188,	-175,	-162,	-149,	-136,	-123,	-110,	-97,	-84,	-71,	-58,	-45,	-32,	-19,	-6	,
	6,	19,	32,	45,	58,	71,	84,	97,	110,	123,	136,	149,	162,	175,	188,	201,	214};
	array <string> num[34] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25","$26","$27","$28","$29","$30",
										"$31","$32","$33","$34"};
	array <string> mun[34] = { "$33","$32","$31","$30",
										"$29","$28","$27","$26","$25","$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor34.set_part_x( 1, stick.x() ); 
	cursor34.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding34.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$34"); dollar_3.redraw();
			coding34.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>34 begin
			if (stick.y()>seq34[t]) 
			then rex34[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding34.set_event_code(num[t]);
			elseif (stick.y()<seq34[t]) 
			then rex34[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_34.set_caption("$34"); dollar_34.redraw();
		codes34.present();
	end;
end;

sub box37 (int duration37)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration37
   until clock.time() >= end_time
	begin
	array <int> seq37[37] = {-214,	-202,	-190,	-178,	-166,	-155,	-143,	-131,	-119,	-107,	-95,	-83,	
	-71,	-59,	-48,	-36,	-24,	-12,	0,	12,	24,	36,	48,	59,	
	71,	83,	95,	107,	119,	131,	143,	155,	166,	178,	190,	202,	214};
	array <string> num[37] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25","$26","$27","$28","$29","$30",
										"$31","$32","$33","$34","$35","$36","$37"};
	array <string> mun[37] = { "$36","$35","$34","$33","$32","$31","$30",
										"$29","$28","$27","$26","$25","$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor37.set_part_x( 1, stick.x() ); 
	cursor37.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding37.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$37"); dollar_3.redraw();
			coding37.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>37 begin
			if (stick.y()>seq37[t]) 
			then rex37[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding37.set_event_code(num[t]);
			elseif (stick.y()<seq37[t]) 
			then rex37[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_37.set_caption("$37"); dollar_37.redraw();
		codes37.present();
	end;
end;

sub box40 (int duration40)
begin stick.set_xy(0,-264);
	loop int end_time = clock.time()  + duration40
   until clock.time() >= end_time
	begin
	array <int> seq40[40] = {-215,	-204,	-193,	-182,	-171,	-160,	-149,	-138,	-127,	-116,	-105,	-94,	-83,	
	-72,	-61,	-50,	-39,	-28,	-17,	-6, 6,	17,	28,	39,	50,	61,
	72,	83,	94,	105,	116,	127,	138,	149,	160,	171,	182,	193,	204,	215};
	array <string> num[40] = { "$1","$2","$3","$4","$5","$6","$7","$8","$9","$10",
										"$11","$12","$13","$14","$15","$16","$17","$18","$19","$20",
										"$21","$22","$23","$24","$25","$26","$27","$28","$29","$30",
										"$31","$32","$33","$34","$35","$36","$37","$38","$39","$40"};
	array <string> mun[40] = { "$39","$38","$37","$36","$35","$34","$33","$32","$31","$30",
										"$29","$28","$27","$26","$25","$24","$23","$22","$21","$20",
										"$19","$18","$17","$16","$15","$14","$13","$12","$11","$10",
										"$9","$8","$7","$6","$5","$4","$3","$2","$1","$0"};
	stick.poll(); 
	cursor40.set_part_x( 1, stick.x() ); 
	cursor40.set_part_y( 1, stick.y() );
		if (stick.y()==-264) then zero.set_color(0,0,0); 
			dollar_2.set_caption("_"); dollar_2.redraw(); 
			dollar_3.set_caption("_"); dollar_3.redraw();
			coding40.set_event_code("_"); 
		end;
		if (stick.y()>-264) 
		then zero.set_color(0,255,0); 
			dollar_2.set_caption("$0"); dollar_2.redraw(); 
			dollar_3.set_caption("$40"); dollar_3.redraw();
			coding40.set_event_code("$0"); 
		elseif (stick.y()<-264) then zero.set_color(0,0,0); 
		end;
		loop int t=1 until t>40 begin
			if (stick.y()>seq40[t]) 
			then rex40[t].set_color(255,0,0); 
			dollar_2.set_caption(num[t]); dollar_2.redraw(); 
			dollar_3.set_caption(mun[t]); dollar_3.redraw();
			coding40.set_event_code(num[t]);
			elseif (stick.y()<seq40[t]) 
			then rex40[t].set_color(0,0,0);
			end;
			t = t + 1;
		end;
		dollar_40.set_caption("$40"); dollar_40.redraw();
		codes40.present();
	end;
end;
